PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
  keyboardBackend = ioHub
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Routines
  Routine baseline
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    CodeComponent baseline_code
      Code Type = Auto->JS
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      Begin Routine:
        random.shuffle(possible_positions)
        pos_baseline_circle1, pos_baseline_circle2, pos_baseline_circle3, pos_baseline_target = possible_positions
    PolygonComponent fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = fixation_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    PolygonComponent baseline_circle1
      fillColor = white
      pos [set every repeat] = pos_baseline_circle1
      saveStartStop = False
      shape = circle
      size = circle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    PolygonComponent baseline_circle2
      fillColor = $color
      lineColor = $color
      pos [set every repeat] = pos_baseline_circle2
      saveStartStop = False
      shape = circle
      size = circle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    PolygonComponent baseline_circle3
      fillColor = white
      pos [set every repeat] = pos_baseline_circle3
      shape = circle
      size = circle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    PolygonComponent baseline_target
      fillColor = white
      pos [set every repeat] = pos_baseline_target
      shape = rectangle
      size = rectangle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    MouseComponent baseline_response
      clickable = baseline_target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
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  Routine load_variables
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        # variables that are constant for the experiment
        import random
        from numpy.random import choice

        fixation_size = (15, 15)
        circle_size = (70,70)
        rectangle_size = (70,70)
        color = "green"
        colors = ["red", "green", "blue"]
        image_size = (300, 300)
        possible_positions = [(0,400), (0,-400), (400, 0), (-400, 0)]
      Begin Experiment:
        distractor_color = ""
        target_color = ""
        correct_response = ""
  Routine action
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    CodeComponent action_code
      Code Type = Auto->JS
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      Begin Routine:
        random.shuffle(possible_positions)
        pos_action_circle1, pos_action_circle2, pos_action_circle3, pos_action_target = possible_positions
    PolygonComponent action_fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = fixation_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    PolygonComponent action_circle1
      fillColor = white
      pos [set every repeat] = pos_action_circle1
      saveStartStop = False
      shape = circle
      size = circle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    PolygonComponent action_circle2
      fillColor = $color
      lineColor = $color
      pos [set every repeat] = pos_action_circle2
      saveStartStop = False
      shape = circle
      size = circle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    PolygonComponent action_circle3
      fillColor = white
      pos [set every repeat] = pos_action_circle3
      shape = circle
      size = circle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    PolygonComponent action_target
      fillColor = white
      pos [set every repeat] = pos_action_target
      shape = rectangle
      size = rectangle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    MouseComponent action_response
      clickable = action_target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
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    ImageComponent action_distractor
      image [set every repeat] = $image
      size = image_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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  Routine perception
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    CodeComponent perception_code
      Code Type = Auto->JS
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      Begin Routine:
        random.shuffle(possible_positions)
        pos_perception_circle1, pos_perception_circle2, pos_perception_circle3, pos_perception_target = possible_positions
        target_color = choice(colors)
        distractor_color = choice(colors)
        thisExp.addData("target color", target_color)
        thisExp.addData("distractor color", distractor_color)

        if(target_color == "red"):
            correct_response = 'r'
        elif (target_color == "green"):
            correct_response = "g"
        elif (target_color == "blue"):
            correct_response = "b"
        else:
            print("how the fuck is target color anything other than red, green or blue")
    PolygonComponent perception_fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = fixation_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    PolygonComponent perception_circle1
      fillColor = white
      pos [set every repeat] = pos_perception_circle1
      saveStartStop = False
      shape = circle
      size = circle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    PolygonComponent perception_circle2
      fillColor [set every repeat] = $distractor_color
      lineColor [set every repeat] = $distractor_color
      pos [set every repeat] = pos_perception_circle2
      saveStartStop = False
      shape = circle
      size = circle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    PolygonComponent perception_circle3
      fillColor = white
      pos [set every repeat] = pos_perception_circle3
      shape = circle
      size = circle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    PolygonComponent perception_target
      fillColor [set every repeat] = $target_color
      lineColor [set every repeat] = $target_color
      pos [set every repeat] = pos_perception_target
      shape = rectangle
      size = rectangle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    ImageComponent perception_distractor
      image [set every repeat] = $image
      size = image_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    KeyboardComponent perception_response
      allowedKeys = 'r', 'g', 'b'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      storeCorrect = True
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  Routine experiment_introduction
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    TextComponent experiment_intro_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome to the experiment!

        press 'spacebar' to continue.
    KeyboardComponent welcome_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine baseline_introduction
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    TextComponent baseline_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        In the experiment, you will be shown three circles and one sqaure. The sqaure is your target. your task is to click on the sqaure as fast as you can.

        press 'spacebar' to continue
    KeyboardComponent baseline_intro_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine action_introduction
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    TextComponent action_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        In this phase, you will be shown three circles, one square and an emotional / non emotional image in the center. Your tasks is to ignore the emotional / non emotional image and click on the sqaure as fast as you can.

        press 'spacebar' to continue
    KeyboardComponent action_intro_respone
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_3
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine perception_introduction
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    TextComponent perception_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        In this phase, you will be shown three circles, one square and an emotional / non emotional image in the center. Now the circle and the target (square)  will keep changing color between red, green and blue. Your task is to ignore the emotional / non emotional image and report the color of the target using the following keys :

        Red - 'r'
        Green - 'g'
        Blue - 'b'

        press 'spacebar' to continue
    KeyboardComponent perception_intro_respone
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_4
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine thank_you
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    TextComponent thank_you_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = thank you for your participation. :))
      units = norm
      wrapWidth = 1.8
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    CodeComponent text_align_5
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
  Routine load_variables
  Routine experiment_introduction
  Routine baseline_introduction
  LoopInitiator baseline_loop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine baseline
  LoopTerminator baseline_loop
  Routine action_introduction
  LoopInitiator action_loop loopType="TrialHandler"
    Selected rows = $choice(268, size = 1, replace = False)
    conditionsFile = distractors.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image', 'LowA(Neutral)/1450.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/1670.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/1812.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2070.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2102.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2104.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2153.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2190.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2200.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2205.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2215.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2221.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2235.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2270.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2273.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2312.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2320.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2377.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2383.jpg'), ('code', 'LowANeutral')])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
    Routine action
  LoopTerminator action_loop
  Routine perception_introduction
  LoopInitiator perception_loop loopType="TrialHandler"
    Selected rows = $choice(268, size = 5, replace = False)
    conditionsFile = distractors.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image', 'LowA(Neutral)/1450.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/1670.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/1812.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2070.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2102.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2104.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2153.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2190.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2200.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2205.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2215.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2221.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2235.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2270.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2273.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2312.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2320.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2377.jpg'), ('code', 'LowANeutral')]),
      OrderedDict([('image', 'LowA(Neutral)/2383.jpg'), ('code', 'LowANeutral')])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
    Routine perception
  LoopTerminator perception_loop
  Routine thank_you
